//@File(label = "Input directory", style = "directory") inputDir
//@File(label = "Output directory", style = "directory") outputDir
// @String (label = "File suffix", value = ".nd2") fileSuffix

// retina_MG_pre-weka_batch
// Theresa Swayne for Tom Winogrodzki and Stephen Tsang, 2025
// 

// TO USE: Create a folder for the output files. 
// 	Run the script in Fiji. 
//  Limitation -- cannot have >1 dots in the filename


// ---- Setup ----

while (nImages>0) { // clean up open images
	selectImage(nImages);
	close();
}
print("\\Clear"); // clear Log window

setBatchMode(true); // faster performance
run("Bio-Formats Macro Extensions"); // support native microscope files

run("Clear Results");
run("Set Measurements...", "area centroid perimeter shape area_fraction limit display redirect=None decimal=3");


// ---- Run ----

print("Starting");
processFolder(inputDir, outputDir, fileSuffix);
while (nImages > 0) { // clean up open images
	selectImage(nImages);
	close(); 
}
setBatchMode(false);
print("Finished");


// ---- Functions ----

function processFolder(input, output, suffix) {
	filenum = -1;
	print("Processing folder", input);
	// scan folder tree to find files with correct suffix
	list = getFileList(input);
	list = Array.sort(list);
	for (i = 0; i < list.length; i++) {
		if(File.isDirectory(input + File.separator + list[i])) {
			processFolder(input + File.separator + list[i], output, suffix);
		}
		if(endsWith(list[i], suffix)) {
			filenum = filenum + 1;
			processFile(input, output, list[i], filenum);
		}
	}
}


function processFile(inputFolder, outputFolder, fileName, fileNumber) {
	
	path = inputFolder + File.separator + fileName;
	print("Processing file at path" ,path);	
	
	
	roiManager("reset");
	dotIndex = indexOf(fileName, "."); // limitation -- cannot have >1 dots in the filename
	basename = substring(fileName, 0, dotIndex); 
	extension = substring(fileName, dotIndex);
	
	Ext.setId(path);
	print("Processing file",fileName, "with basename",basename);
	startTime = getTime();

	// open only channel 3
	run("Bio-Formats", "open=&path color_mode=Default specify_range view=Hyperstack stack_order=XYCZT c_begin=3 c_end=3 c_step=1");
	
	title = getTitle();
	
	// project first 4 slices
	run("Z Project...", "stop=4 projection=[Max Intensity]");
	rename("z1-4");
	run("Duplicate...", "title=thresh");
	
	// enhance local contrast and threshold
	selectWindow("thresh");
	run("Enhance Local Contrast (CLAHE)", "blocksize=20 histogram=256 maximum=3 mask=*None* fast_(less_accurate)");

	
	setAutoThreshold("Otsu dark");
	setOption("BlackBackground", false);
	run("Convert to Mask");
	// remove noise and join up adjacent structures
	run("Close-");
	run("Despeckle");
	
	// analyze particles at least 100 µm2
	run("Analyze Particles...", "size=100-Infinity show=Nothing display exclude add");

	// save the ROIs and results
	roiName = basename+"_microglia_ROIset.zip";
	roiManager("deselect");
	roiManager("save", outputFolder + File.separator + roiName);
	
	saveAs("Results", outputFolder + File.separator + basename + "_microglia_results.csv");
	run("Clear Results");
	
	selectWindow("z1-4");
	setOption("ScaleConversions", true);
	run("8-bit");
	saveAs("Tiff", outputFolder + File.separator + basename + "_z1-4.tif");
	close();

	selectWindow(title);
	close();
	
	selectWindow("thresh");
	close();		

	print("Elapsed time " + (getTime() - startTime) + " msec");
	
} // process file

	